//Clear the Log
print("\\Clear")

//Create the dialog GUI box for user
Dialog.create("Multi-channel Microscopy");

//Directory box
inputDir=getDirectory("image");
Dialog.addDirectory("Images path",inputDir);

//Add Channels and Thresholds
Dialog.addMessage("Add each channel substring (e.g. ch00) and what thresholding you'd like (see Image>Adjust>Threshold):");

//List of threshold items in ImageJ
threshold_items = newArray("None","Default","Huang","Intermodes","IsoData","IJ_IsoData","Li","MaxEntropy","Mean","MinError","Minimum","Moments","Otsu","Percentile","RenyiEntropy","Shanbhag","Triangle","Yen");

//List of available channels, can increase more if necessary (in the ideal world, a user could add new channels, but it's unclear if it's possible in the macro language)
channel_array = newArray("C1","C2","C3","C4","C5","C6");

//Creating the Channel and Threshold boxes
for (i=0; i<lengthOf(channel_array); i++) {
    Dialog.addString(channel_array[i], "None");
    Dialog.addToSameRow();
    Dialog.addChoice("Threshold:", threshold_items);
    Dialog.addToSameRow();
    Dialog.addCheckbox("Use as counter-stain:",false);
}

//Select counter-stain
Dialog.addMessage("");//just adding a gap

Dialog.addCheckbox("Counter-stain?",true); 
Dialog.addToSameRow(); 
Dialog.addMessage("(unchecking will mean particles will not necessarily overlap between channels)");

//Dialog.addString("Counter-stain substring","");
//Dialog.addToSameRow();
//Dialog.addMessage("Make sure it is one of the channels listed above!");
Dialog.addChoice("Counter-stain Threshold:", threshold_items);
Dialog.addToSameRow(); 
Dialog.addMessage("Cannot be None!");


// Add Set Measurements checkboxes
Dialog.addMessage("Select the information you'd like to report (see Analyze>Set Measurements):");
rows = 3
columns = 6
set_measurements_labels = newArray("Area","Mean gray value", "Standard deviation", "Modal gray value", "Min & max gray value", "Centroid", "Center of mass", "Perimeter", "Bounding rectangle", "Fit ellipse", "shape descriptors", "Feret's diameter", "Integrated density", "Median", "Skewness", "Kurtosis", "Area fraction", "Stack position");
set_measurements_defaults = newArray(lengthOf(set_measurements_labels));
for (i=0; i<lengthOf(set_measurements_labels); i++) {
    set_measurements_defaults[i] = false;
}
Dialog.addCheckboxGroup(rows,columns,set_measurements_labels,set_measurements_defaults);

//Add watershed information
Dialog.addMessage("Add watershed parameters (Default: 0.5, if this is adjusted then make sure you have the Adjustable Watershed plugin!):");
Dialog.addCheckbox("Watershed?",true); 
Dialog.addToSameRow();
Dialog.addString("Tolerance", "0.5");

//Add analyze particles information
Dialog.addMessage("Add particle size information (see Analyze>Analyze Particles):");
Dialog.addString("size", "0-Infinity");
Dialog.addToSameRow();
Dialog.addString("unit (e.g. micron, pixel)", "micron");
Dialog.addString("circularity", "0-1");


//Alignment
Dialog.addCheckbox("Would you like to align your images using a transformation from MultiStackReg?", false);
transformDir=getDirectory("image");
Dialog.addFile("MultiStackReg Transformation File:",transformDir);
Dialog.addString("Reference Channel for Transformation", "None");


//Show the dialog window
Dialog.show();

//////////////////////////////////////////
//////
//        Getting Input Variables            //
/////////////////////////////////////////
/////

//Get path string
inputDir=Dialog.getString();

//looping through the channel selections and putting them into new arrays without the None
selected_channels = newArray();
selected_thresholds = newArray();
selected_counter_stains = newArray();

for (i=0; i<lengthOf(channel_array); i++) {
	current_channel = Dialog.getString();
	current_threshold = Dialog.getChoice();
	current_counter_stain = Dialog.getCheckbox();
		if (current_channel!="None"){
			selected_channels = Array.concat(selected_channels, current_channel);
			selected_thresholds = Array.concat(selected_thresholds, current_threshold);
			selected_counter_stains = Array.concat(selected_counter_stains, current_counter_stain);
		}
}

is_there_a_counter_stain = Dialog.getCheckbox();
//selected_counter_stain = Dialog.getString();
selected_counter_stain_threshold = Dialog.getChoice();

//looping the set measurements selections and make string variable with the correct arguments to call
selected_set_measurements_arguments = "";
set_measurments_imagej_args = newArray("area", "mean", "standard", "modal" ,"min", "centroid", "center" ,"perimeter", "bounding" ,"fit" ,"shape" ,"feret's" ,"integrated", "median" ,"skewness" ,"kurtosis" ,"area_fraction" ,"stack");

for (i=0; i<lengthOf(set_measurements_labels); i++){
	set_measurements_boolean = Dialog.getCheckbox();
	if (set_measurements_boolean==1){
		selected_set_measurements_arguments = selected_set_measurements_arguments + " "+ set_measurments_imagej_args[i];
	}
}
//if no set measurement args are selected, it defaults to area fraction
if (selected_set_measurements_arguments == ""){
	print("No Set Measurements arguments were selected, defaulting to Area Fraction");
	selected_set_measurements_arguments = "area_fraction";
}

//Watershed Inputs

do_watershed=Dialog.getCheckbox();
watershed_tolerance=Dialog.getString();

if (do_watershed == 1) {
    watershed_result = "true";
} else {
    watershed_result = "false";
}

//Analyze Particicles Inputs
size=Dialog.getString();
unit=Dialog.getString();
circularity=Dialog.getString();


transformation_boolean = Dialog.getCheckbox();
transformFile=Dialog.getString();
transformation_channel=Dialog.getString();

//////////////////////////////////////////////////////////
/////////////////////////////////////////////////////////
////////////////////////////////////////////////////////

print("-----Running------");
print("Here are your variables:");
print("path = ", inputDir);
for (i=0; i<lengthOf(selected_channels); i++) {
	print("C",i+1," = ",selected_channels[i],"    Threshold =",selected_thresholds[i],"       Counter-stain =",selected_counter_stains[i]);
}

//print("Counter-stain = ",selected_counter_stain);
print("Counter-stain threshold=",selected_counter_stain_threshold);
print("Set Measurements Args = ",selected_set_measurements_arguments);
print("Perform Watershed = ", watershed_result);
print("Watershed Tolerance = ", watershed_tolerance);
print("Particle size = ",size," ",unit);
print("Particle circularity = ",circularity);


//////////////////////////////////////////////////////////////

run("Clear Results");
close("*");
fileList = getFileList(inputDir);

//selects the counter-stain as the reference for determining file names
//if there is no counter-stain, then the first channel is used.
//if (is_there_a_counter_stain==1){
//	if (selected_counter_stain == ""){
//		exit("Counter-stain selected but no counter-stain channel was specified. Please indicate correctly whether you used a counter-stain, and specify the correct channe!");
//	} else {
//	target_substring = selected_counter_stain;
//		// Remove only the first occurrence of the counter-stain from selected_channels
//		selected_data_channels = newArray();
//		removed = false;
//		for (i = 0; i < lengthOf(selected_channels); i++) {
//		    if (!removed && selected_channels[i] == selected_counter_stain) {
//		        removed = true;
//		    } else {
//		        selected_data_channels = Array.concat(selected_data_channels, selected_channels[i]);
//		    }
//		}
//	}
//} else {
//	target_substring = selected_channels[0];
//	selected_data_channels = selected_channels;
//}
//
//iregex = ".*" + target_substring +".*";

iregex = ".*" + selected_channels[0] +".*";
target_substring=selected_channels[0];
////////////////////////////////////////////////
/////////// Main Analysis Loop /////////////////
////////////////////////////////////////////////
File.makeDirectory(inputDir+"/particle_images/");

for (i = 0; i < lengthOf(fileList); i++){
	
	//enters the if-statement for each unique field of view (based on the first channel)
	if(matches(fileList[i], iregex)){
		print("-----Analyzing "+ fileList[i]+ "-----");
		
		// Remove the file extension by splitting the string at the period and taking the first part
		fileNameWithoutExtension = substring(fileList[i], 0, lastIndexOf(fileList[i], "."));
		fov_name = replace(fileNameWithoutExtension, target_substring, "");
		
		counter_stain_array = newArray();

		//splits the file name in to two halves to get the file name structure so that it can be used to open each channel
		//array of left (0) and right side (1) of the file name 
		index_channel_substring = indexOf(fileList[i], target_substring);
		imageName_split_by_channel = newArray(substring(fileList[i], 0, index_channel_substring),substring(fileList[i], index_channel_substring+lengthOf(target_substring)));
		
		//for error testing if the images aren't opening properly
		//print(imageName_split_by_channel[0],imageName_split_by_channel[1]);
	
		//Opens every channel image in each field of view 
		for (j = 0; j < lengthOf(selected_channels); j++){
		    img_path = inputDir + imageName_split_by_channel[0] + selected_channels[j] + imageName_split_by_channel[1];
		    print("opening " + img_path);
		    open(img_path);
		    run("8-bit");
		    setOption("BlackBackground", true);
		    
		    if (transformation_boolean == 1 && selected_channels[j] != transformation_channel){
		    	print("Transforming "+imageName_split_by_channel[0] + selected_channels[j] + imageName_split_by_channel[1]);
		    	run("MultiStackReg", "stack_1="+imageName_split_by_channel[0] + selected_channels[j] + imageName_split_by_channel[1]+" action_1=[Load Transformation File] file_1="+transformFile+" stack_2=None action_2=Ignore file_2=[] transformation=[Rigid Body]");
		    }
            
            if (selected_counter_stains[j]==1) {
            	print("Duplicating "+imageName_split_by_channel[0] + selected_channels[j] + imageName_split_by_channel[1]+"to make it into a reference image later");
            	run("Duplicate...", "title="+"Counter-Stain_"+imageName_split_by_channel[0] + selected_channels[j] + imageName_split_by_channel[1]);
		    	counter_stain_array = Array.concat(counter_stain_array,"Counter-Stain_"+imageName_split_by_channel[0] +selected_channels[j] + imageName_split_by_channel[1]);
		    }

            
            
            
//		    // Check if this is the first occurrence of the counter-stain in the sequence
//		    if (selected_channels[j] == selected_counter_stain && !counter_stain_found) {
//		    	// Selecting the window so we can change the name
//		    	selectWindow(imageName_split_by_channel[0] + selected_channels[j] + imageName_split_by_channel[1]);
//		        // Rename the original image so it can be preserved and referred to later
//		        counter_stain_image_name = "counter_stain_image";
//		        rename(counter_stain_image_name);
//		        print("Renamed the counter-stain to: " + counter_stain_image_name);
//		        // Mark counter-stain as found
//		        counter_stain_found = true;
//		    }

			//thresholding the image
		    if (selected_thresholds[j] != "None") {
		        setAutoThreshold(selected_thresholds[j] + " dark");
		        run("Convert to Mask");
		    } else {
		        print("Skipping thresholding for channel: " + selected_channels[j]);
		    } 
		}
		
////Making the counter-stain image - Use this code if you want to merge your counter stain images
//		if (lengthOf(counter_stain_array)==1) {
//		    	print("only one counter-stain detected, going to duplicate and use it as the reference");
//		    	selectWindow(counter_stain_array[0]);
//		    	run("Duplicate...", "title=Result");
//		    }
//		    
//		    if (lengthOf(counter_stain_array)==2) {
//		    	print("multiple counter-stains detected, going to make a composite reference image");
//		    	run("Calculator Plus", "i1="+counter_stain_array[0]+" i2="+counter_stain_array[1]+" operation=[Add: i2 = (i1+i2) x k1 + k2] k1=1 k2=0 create");
//		    }
//		    
//		    if (lengthOf(counter_stain_array)>2) {
//		    	exit("Sorry, this code only works for 2 reference images. This is the result of a quick fix rather than a long term solution... Big Sad... Please get in touch if you want to use more and I will update it accordingly");
//		    }
//		    
//		counter_stain_image_name="Result";



		//Setting initial set measurements
		//If there is a counter-stain, only this line will apply for the counter-stain and the rest must be redirected
		//If there is no counter-stain, then this line will be used for all images
		run("Set Measurements...", selected_set_measurements_arguments+" "+"redirect=None");
		if (is_there_a_counter_stain == 1){
		for (counter_stain_channel=0; counter_stain_channel < lengthOf(counter_stain_array); counter_stain_channel++){
			//prevNumResults allows data from each channel and FOV to be added to the same results page
			prevNumResults = nResults;
			print(counter_stain_channel);
			print("Running with counterstain:"+counter_stain_array[counter_stain_channel]);
			selectWindow(counter_stain_array[counter_stain_channel]);
			setAutoThreshold(selected_counter_stain_threshold + " dark");
		    run("Convert to Mask");
	
		
			//Watershed algorithm seperates overlapping blobs
			//Runs the default Watershed algorithm if tolerance is 0.5, otherwise it uses the adjustable plugin (must be installed)
			if (do_watershed == 1) {
				if (watershed_tolerance == 0.5){
					run("Watershed");
				} else {
					run("Adjustable Watershed", "tolerance="+watershed_tolerance);
				}
			}
		
			run("Analyze Particles...", "size="+size+" "+unit+" "+"circularity="+circularity+" "+"show=Overlay overlay display exclude");
			
			for (row = prevNumResults; row < nResults; row++){
				setResult("FileName", row, counter_stain_array[counter_stain_channel]);
				setResult("Counter-stain", row, counter_stain_array[counter_stain_channel]);
				setResult("Image Type", row, "counter-stain");
				setResult("Cell Number", row, row-prevNumResults);
			}
		////////////////////////////////////////
		// Analyzing data images
		///////////////////////////////////////
		for (channel = 0; channel < lengthOf(selected_channels);channel++){
			print(channel);
			prevNumResults = nResults;
			
			run("Set Measurements...", selected_set_measurements_arguments+" "+"redirect=["+imageName_split_by_channel[0]+selected_channels[channel]+imageName_split_by_channel[1]+"]");
			
			
			run("Analyze Particles...", "size="+size+" "+unit+" "+"circularity="+circularity+" "+"show=Overlay overlay display exclude");
			for (row = prevNumResults; row < nResults; row++){
				setResult("FileName", row, imageName_split_by_channel[0]+selected_channels[channel]+imageName_split_by_channel[1]);
				setResult("Counter-stain", row, counter_stain_array[counter_stain_channel]);
				setResult("Image Type", row, "data");
				setResult("Cell Number", row, row-prevNumResults);
				}
		}
		selectWindow(counter_stain_array[counter_stain_channel]);
		run("Flatten");
		particle_image_savePath = inputDir+"/particle_images/"+counter_stain_array[counter_stain_channel]+"_PARTICLES.png";
		saveAs("png", particle_image_savePath);
		}
		
		} else{
			exit("Please include a counter-stain :( Unfortunately this is old code that I could probably fix if it ever came up, but for right now at least select one..."
		}
		//Closing the images for this field of view to start it fresh for the next one
		close("*");
		}
}


//Auto-save Log
selectWindow("Log");
File.makeDirectory(inputDir+"/cell_counter_log");
log_path = inputDir+"/cell_counter_log/cell_counter_log.txt";

saveAs("Text",log_path);